CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:High1
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:High1
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:High1grey
    Convert blue to gray?:No
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
Watershed:[module_num:6|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
    Select the input image:High1grey
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:High1grey
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):50,500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:High1
    Name the output image:High1overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#E6DB1A
    Select objects to display:Watershed
